PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'name': '', 'age': '', 'gender': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = untitled
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine intrpduction
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    TextComponent intro1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        你好，欢迎参加实验！
        请按空格继续。
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine intro_A
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        m = 0
        n = 0
        nt = 0
    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        你好，接下来这部分你的任务如下：
        看到屏幕上出现有颜色的圆就快速按“J”键。
        圆圈最多持续3秒，在按键后立即消失,
        刺激出现3秒内不做反应视为错过。
        你需要等待它再次出现。

        理解上述任务后，请按空格键开始实验。
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine focus
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        tt = randint(2,5)
    PolygonComponent polygon_4
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tt
      units = height
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  Routine text_A
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    PolygonComponent polygon
      fillColor [set every repeat] = $circle_color
      lineColor [set every repeat] = $circle_color
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_3
      allowedKeys = 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        nt = 0
      End Routine:
        if key_resp_3.keys:
            # 如果有按键响应，则获取反应时
            nt = key_resp_3.rt
            n += 1
            m += nt
        else:
            # 如果没有按键响应，则保持反应时为0
            pass  # 这里其实不需要额外的操作，因为rt已经被初始化为0了
  Routine black
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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  Routine feedback1
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        rt = m/n
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"平均反应时为: "  + str(round(rt, 3)) + " \n\n现在休息一会吧，休息完毕请按空格键继续."  
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_B
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        m = 0
        n = 0
        nt = 0
    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        你好，接下来这部分你的任务如下：
        看到屏幕上出现红色圆就快速按“J”键，
        其余时候不按键。
        圆最多持续3秒，在按键后立即消失，
        你需要等待它再次出现。

        理解上述任务后，请按空格键开始实验。
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine focus2
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        tt = randint(2,5)
    PolygonComponent polygon_5
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tt
      units = height
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  Routine black2
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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  Routine textB
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    PolygonComponent polygon_2
      fillColor [set every repeat] = $circle_color
      lineColor [set every repeat] = $circle_color
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_4
      allowedKeys = 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        nt = 0
      End Routine:
        if key_resp_4.keys:
            # 如果有按键响应，则获取反应时
            nt = key_resp_4.rt
        else:
            # 如果没有按键响应，则保持反应时为0
            pass  # 这里其实不需要额外的操作，因为rt已经被初始化为0了


        if(need_action == 1):
            m += nt
            n += 1
  Routine feedback2
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        rt = m/n
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"平均反应时为: "  + str(round(rt, 3)) + " \n\n现在休息一会吧，休息完毕请按空格键继续."  
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_C
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        m = 0
        f = 0
        t = 0
        n = 0
        zql = 0
        nt = 0
    TextComponent text_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        你好，接下来这部分你的任务如下：
        看到屏幕上出现红色圆就快速按“J”键，
        看到屏幕上出现蓝色圆就快速按“F”键.
        圆最多持续3秒，在按键后立即消失，
        你需要等待它再次出现。

        理解上述任务后，请按空格键开始实验。
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine focus3
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        tt = randint(2,5)
    PolygonComponent polygon_6
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tt
      units = height
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  Routine black3
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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  Routine texkC
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    PolygonComponent polygon_3
      fillColor [set every repeat] = $circle_color
      lineColor [set every repeat] = $circle_color
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_7
      allowedKeys = 'j','f'
      correctAns = $answer_correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        nt = 0
      End Routine:
        if key_resp_7.keys:
            # 如果有按键响应，则获取反应时
            nt = key_resp_7.rt
            m += nt
            n += 1
        else:
            # 如果没有按键响应，则保持反应时为0
            pass  # 这里其实不需要额外的操作，因为rt已经被初始化为0了


        if(key_resp_7.corr == 1):
            t += 1

        else:
            f += 1
  Routine feedback3
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        rt = m/n
        zql = t/(t+f)
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"平均反应时为: "  + str(round(rt, 3)) + " \n正确率为: "  + str(round(zql, 3)) + " \n\n按空格结束界面"  
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine end
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 实验结束，感谢你的参与！
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Flow
  Routine intrpduction
  Routine intro_A
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = text.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'circle_color': 'red', 'answer_correct': 'j', 'need_action': 1},
      {'circle_color': 'blue', 'answer_correct': 'f', 'need_action': 0},
      {'circle_color': 'red', 'answer_correct': 'j', 'need_action': 1},
      {'circle_color': 'blue', 'answer_correct': 'f', 'need_action': 0},
      {'circle_color': 'red', 'answer_correct': 'j', 'need_action': 1},
      {'circle_color': 'blue', 'answer_correct': 'f', 'need_action': 0},
      {'circle_color': 'red', 'answer_correct': 'j', 'need_action': 1},
      {'circle_color': 'blue', 'answer_correct': 'f', 'need_action': 0},
      {'circle_color': 'red', 'answer_correct': 'j', 'need_action': 1},
      {'circle_color': 'blue', 'answer_correct': 'f', 'need_action': 0}]
    Routine focus
    Routine black
    Routine text_A
  LoopTerminator trials
  Routine feedback1
  Routine intro_B
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = text.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'circle_color': 'red', 'answer_correct': 'j', 'need_action': 1},
      {'circle_color': 'blue', 'answer_correct': 'f', 'need_action': 0},
      {'circle_color': 'red', 'answer_correct': 'j', 'need_action': 1},
      {'circle_color': 'blue', 'answer_correct': 'f', 'need_action': 0},
      {'circle_color': 'red', 'answer_correct': 'j', 'need_action': 1},
      {'circle_color': 'blue', 'answer_correct': 'f', 'need_action': 0},
      {'circle_color': 'red', 'answer_correct': 'j', 'need_action': 1},
      {'circle_color': 'blue', 'answer_correct': 'f', 'need_action': 0},
      {'circle_color': 'red', 'answer_correct': 'j', 'need_action': 1},
      {'circle_color': 'blue', 'answer_correct': 'f', 'need_action': 0}]
    Routine focus2
    Routine black2
    Routine textB
  LoopTerminator trials_2
  Routine feedback2
  Routine intro_C
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = text.xlsx
    loopType = random
    nReps = 2
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    conditions:
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    Routine focus3
    Routine black3
    Routine texkC
  LoopTerminator trials_3
  Routine feedback3
  Routine end
